CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Load stacks or raw IMC images and corresponding cell masks.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Not needed here.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['Define stacks or raw IMC images (named "ImageStack") and corresponding cell masks (named "Mask").']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "imc")
    Name to assign these images:ImageStack
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "mask")
    Name to assign these images:Mask
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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notes:['Not needed here.']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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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notes:['Convert the mask to cell objects']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
    Select the input image:Mask
    Name the output object:Cells
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

MeasureObjectIntensity Multichannel:[module_num:6|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notes:['Measure channel intensity for all the cells']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
    Hidden:1
    Select an image to measure:ImageStack
    Number of channels:38
    Select objects to measure:Cells

MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:Cells
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:8|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notes:['Export single cell measurements to a CSV spreadsheet']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\172.23.111.24\\bbvolume\\server_homes\\nicolasd\\Git\\SingleCellMapper\\inst\\extdata\\cpoutput
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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